# Generated by Configurator on Wed Feb 13 16:05:55 EST 2019

# Reset
Property,Core,Initialize,0

# Devices
Device,COM1,SerialManager,COM1
Device,TIScope,NikonTI,TIScope
Device,TINosePiece,NikonTI,TINosePiece
Device,TICondenserCassette,NikonTI,TICondenserCassette
Device,TIFilterBlock1,NikonTI,TIFilterBlock1
Device,TILightPath,NikonTI,TILightPath
Device,TIZDrive,NikonTI,TIZDrive
Device,TIScope-1,NikonTI,TIScope
Device,TIScope-2,NikonTI,TIScope
Device,LudlController,Ludl,LudlController
Device,XYStage,Ludl,XYStage
Device,TIScope-3,NikonTI,TIScope
Device,Camera-1,PVCAM,Camera-1

# Pre-init settings for devices
Property,LudlController,Port,COM1

# Pre-init settings for COM ports
Property,COM1,AnswerTimeout,2000.0000
Property,COM1,BaudRate,9600
Property,COM1,DataBits,8
Property,COM1,DelayBetweenCharsMs,11.0000
Property,COM1,Fast USB to Serial,Disable
Property,COM1,Handshaking,Off
Property,COM1,Parity,None
Property,COM1,StopBits,2
Property,COM1,Verbose,1

# Hub (parent) references
Parent,TINosePiece,TIScope
Parent,TICondenserCassette,TIScope
Parent,TIFilterBlock1,TIScope
Parent,TILightPath,TIScope
Parent,TIZDrive,TIScope

# Initialize
Property,Core,Initialize,1

# Delays
Delay,TINosePiece,100.0
Delay,TICondenserCassette,100.0
Delay,TIFilterBlock1,100.0
Delay,TILightPath,100.0

# Focus directions
FocusDirection,TIZDrive,0

# Roles
Property,Core,Camera,Camera-1
Property,Core,Focus,TIZDrive
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# TINosePiece
Label,TINosePiece,5,6-Unknown
Label,TINosePiece,4,5-Plan Apo VC 60x NA 1.40 Oil
Label,TINosePiece,3,4-S Plan Fluor 40x NA 0.60 Dry
Label,TINosePiece,2,3-Plan 20x NA 0.40 Dry
Label,TINosePiece,1,2-Plan Fluor 10x NA 0.30 Dry
Label,TINosePiece,0,1-Plan Fluor 4x NA 0.13 Dry
# TICondenserCassette
Label,TICondenserCassette,4,5 Ph2
Label,TICondenserCassette,3,4 Ph2
Label,TICondenserCassette,2,3 Ph1
Label,TICondenserCassette,1,2 PhL
Label,TICondenserCassette,0,1 A
# TIFilterBlock1
Label,TIFilterBlock1,5,6------
Label,TIFilterBlock1,4,5-5050Mirror
Label,TIFilterBlock1,3,4-TRITC
Label,TIFilterBlock1,2,3-FITC
Label,TIFilterBlock1,1,2-DAPI
Label,TIFilterBlock1,0,1-YFPhq
# TILightPath
Label,TILightPath,3,4-Left80
Label,TILightPath,2,3-Right100
Label,TILightPath,1,2-Left100
Label,TILightPath,0,1-Eye100

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

